OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.6.0)

Python 3 scripting
  Clock frequency (Hz) = 64
  Script = ${Player_ScenarioDirectory}/pythonscripts/modding.py

Acquisition client => #1
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#1.Signal stream -> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 0.5
  High Cut-off Frequency (Hz) = 45
-> Common Average Reference
-> Time based epoching
  Epoch duration (in sec) = 2
  Epoch intervals (in sec) = 0.5
-> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 15
-> Python 3 scripting
  Clock frequency (Hz) = 64
  Script = ${Player_ScenarioDirectory}/pythonscripts/IM_CSP_pipeline.py
Data=#1.Signal stream -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 1
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
