OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Data Acquisition
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  This protocol displays the instructions when a new CSP filter has to be trained.
  A window will pop up and display arrows pointing either left or right,
  indicating the hand the subject should move.

  This data is then automatically labelled and stored in an EDF file,
  which is processed by a separate python file to generate the filter.

Graz Motor Imagery BCI Stimulator => #0
  Lua Script = ${Player_ScenarioDirectory}/models/motor-imagery-bci-graz-stimulator.lua
  Number of Trials for Each Class = 1
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 10
  Wait For Beep Duration (in sec) = 2
  Wait For Cue Duration (in sec) = 0
  Display Cue Duration (in sec) = 1
  Feedback Duration (in sec) = 2
  End of Trial Minimum Duration (in sec) = 0
  End of Trial Maximum Duration (in sec) = 5
Stimulations=#0 -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false

Acquisition client => #2
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Experiment information=#2.Experiment information, Signal=#2.Signal stream, Stimulations=#2.Stimulations -> EDF File Writer
  Filename = ${Player_ScenarioDirectory}/signals/IM_Acquisition_CSP.edf
#2.Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
