OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.6.0)

Python 3 scripting
  Clock frequency (Hz) = 64
  Script = ${Player_ScenarioDirectory}/pythonscripts/modding.py

Acquisition client => #1
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#1.Signal stream -> Downsampling
  New sampling rate (Hz) = 160
  Frequency cutoff ratio = 1/2
  Name of filter = Butterworth
  Filter order = 4
  Pass band ripple (dB) = 0.5
-> Temporal Filter (INSERM contrib)
  Filter method = Butterworth
  Filter type = Band Pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 75
  Pass band ripple (dB) = 0.5
-> Common Average Reference
-> Time based epoching => #5
  Epoch duration (in sec) = 2
  Epoch intervals (in sec) = 1
-> Python 3 scripting
  Clock frequency (Hz) = 1
  Script = ${Player_ScenarioDirectory}/pythonscripts/IM_DL_pipeline.py
Data=#5 -> Signal display "EpochedData"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Data=#1.Signal stream -> Signal display "RawData"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
