OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.6.0)
Comment
  Imaginary Movement
Comment
  Emotions

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 0.5
  High Cut-off Frequency (Hz) = 45
-> Common Average Reference
-> Time based epoching
  Epoch duration (in sec) = 2
  Epoch intervals (in sec) = 1
-> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 15
-> Python 3 scripting
  Clock frequency (Hz) = 64
  Script = ${Player_ScenarioDirectory}/pythonscripts/IM_CSP_pipeline.py
#0.Signal stream -> Downsampling
  New sampling rate (Hz) = 256
  Frequency cutoff ratio = 1/2
  Name of filter = Butterworth
  Filter order = 4
  Pass band ripple (dB) = 0.5
-> Temporal Filter (INSERM contrib)
  Filter method = Butterworth
  Filter type = Band Pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 75
  Pass band ripple (dB) = 0.5
-> Common Average Reference
-> Time based epoching
  Epoch duration (in sec) = 4
  Epoch intervals (in sec) = 30
-> Python 3 scripting
  Clock frequency (Hz) = 1
  Script = ${Player_ScenarioDirectory}/pythonscripts/EM_pipeline.py
Data=#0.Signal stream -> Signal display "RawData"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false

Modding
  Clock frequency (Hz) = 64
  Script = ${Player_ScenarioDirectory}/pythonscripts/modding.py
